{load_file("nrngui.hoc")}
{load_file("cell_template.hoc")}
{load_file("graphic_library.hoc")}


// main.hoc

tstop = 2000
v_init = -50
objref CellA, CellB // declare neuron object
objref syn[2] //Create a synapse array to store obj references
objref nc[2] //Create a connection array to store the connection references
CellA = new HCOcell() // build neuron from template
CellB = new HCOcell()

// for stimulating it using current injection
objref ccl
CellA.soma ccl = new IClamp(.5)
ccl.del = 0
ccl.dur = 10
ccl.amp = 1

// for stimulating it using a synapse
CellA.soma syn[0] = new inhsyn(.5) // build a synapse input into CellA
CellB.soma syn[1] = new inhsyn(.5) // build a synapse input into CellB

syn[0].esyn = -80 // (mV) synaptic channels reversal potential
syn[0].gmax = 40e-3 // (uS) synaptic channels maximum conductance
syn[1].esyn = -80 // (mV) synaptic channels reversal potential
syn[1].gmax = 40e-3 // (uS) synaptic channels maximum conductance

weight1 = 10
weight2 = 10

CellA.soma nc[0] = new NetCon(&v(.5),syn[1],0, 0, weight1)
CellB.soma nc[1] = new NetCon(&v(.5),syn[0],0, 0, weight2)

allInOneBoxHCOSingle("CellA", CellA, ccl, syn[0],"CellB", CellB, syn[1])
